PsychoPy2experiment version="3.1.0"
Settings
  Experiment info = {'Participant ID*': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1366, 768]
  expName = Probabilistic Learning
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Routines
  Routine trial
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        from numpy.random import random

        #create empty variables

        myCount1 = 0
        myCount2 = 0
        myCount3 = 0

        #create emoty lists

        resp1 = []
        resp2 = []
        resp3 = []

        resplist1 = []
        resplist2 = []
        resplist3 = []

        Corr1 = []
        Corr2 = []
        Corr3 = []
      Begin JS Experiment:
        myCount1 = 0
        myCount2 = 0
        myCount3 = 0

        resp1 = []
        resp2 = []
        resp3 = []

        resplist1 = []
        resplist2 = []
        resplist3 = []

        Corr1 = 0
        Corr2 = 0
        Corr3 = 0
      Begin JS Routine:
        if(myCount == 1) {
          myCount1 = myCount1 + 1;
        } else {
          myCount1 = myCount1 + 0;
        }

        if(myCount == 2) {
          myCount2 = myCount2 + 1;
        } else {
          myCount2 = myCount2 + 0;
        }

        if(myCount == 3) {
          myCount3 = myCount3 + 1;
        } else {
          myCount3 = myCount3 + 0;
        }


        practiceA = resplist1.slice(-60)
        practiceB = resplist2.slice(-60)
        practiceC = resplist3.slice(-60)


        arrSum = function(arr){
          return arr.reduce(function(a,b){
            return a + b
          }, 0);
        }


        Corr1 = arrSum(practiceA)
        Corr2 = arrSum(practiceB)
        Corr3 = arrSum(practiceC)


        if (myCount == 1 && Corr1 > 13 && Corr2 > 11 && Corr3 > 9 && myCount1 > 59){
            practice.finished = true;
        }

        if (myCount == 2 && Corr1 > 13 && Corr2 > 11 && Corr3 > 9 && myCount2 > 59){
            practice.finished = true;
        }

        if (myCount == 3 && Corr1 > 13 && Corr2 > 11 && Corr3 > 9 && myCount3 > 59){
            practice.finished = true;
        }


        jitter = Math.random() * (0.8 - 0.3) + 0.3;

        jitter = round(jitter, 1);


        jitter2 = Math.random() * (1.0 - 0.5) + 0.5;

        jitter2 = round(jitter2, 1);

        function round(value, precision) {
            var x = Math.pow(10, precision);
            return Math.round(value * x) / x;
        }
      Begin Routine:
        # make a count of trials for each pair of letters (A&B, C&D, E&F)
        if (myCount == 1):
            myCount1 = myCount1 + 1
        else:
            myCount1 = myCount1 + 0

        if (myCount == 2):
            myCount2 = myCount2 + 1
        else:
            myCount2 = myCount2 + 0

        if (myCount == 3):
            myCount3 = myCount3 + 1
        else:
            myCount3 = myCount3 + 0

        #Monitor the number of A, C and E responses in the last 60 trials
        #Separate for all three runs of the procedure

        if myCount == 1 and (sum(resplist1[-60:]) > 13 and sum(resplist2[-60:]) > 11 and sum(resplist3[-60:]) > 9 and myCount1 > 59):
            practice.finished = True

        if myCount == 2 and (sum(resplist1[-60:]) > 13 and sum(resplist2[-60:]) > 11 and sum(resplist3[-60:]) > 9 and myCount2 > 59):
            practice.finished = True

        if myCount == 3 and (sum(resplist1[-60:]) > 13 and sum(resplist2[-60:]) > 11 and sum(resplist3[-60:]) > 9 and myCount3 > 59):
            practice.finished = True


        jitter = random() * (0.8 - 0.3) + 0.3
        jitter = round(jitter, 1) # round to 1 decimal place
        jitter2 = random() * (1.0-0.5) + 0.5
      End JS Routine:
        if(resp.keys == letterA) {
          resp1 = 1;
        } else {
          resp1 = 0;
        }

        if(resp.keys == letterC) {
          resp2 = 1;
        } else {
          resp2 = 0;
        }

        if(resp.keys == letterE) {
          resp3 = 1;
        } else {
          resp3 = 0;
        }

        resplist1.push(resp1)
        resplist2.push(resp2)
        resplist3.push(resp3)
      End Routine:
        #count how many times participants chose letters A, C and E
        if (resp.keys == letterA):
            resp1 = 1
        else:
            resp1 = 0

        if (resp.keys == letterC):
            resp2 = 1
        else:
            resp2 = 0

        if (resp.keys == letterE):
            resp3 = 1
        else:
            resp3 = 0

        resplist1.append(resp1)
        resplist2.append(resp2)
        resplist3.append(resp3)

        Corr1 = sum(resplist1[-60:])
        Corr2 = sum(resplist2[-60:])
        Corr3 = sum(resplist3[-60:])


        #add a variable in the output that will record when participants
        #respond with A C or E in the learning phase
        practice.addData('resp1', resp1)

        practice.addData('resp2', resp2)

        practice.addData('resp3', resp3)


        practice.addData('response1', resplist1[0:10])

        practice.addData('response2', resplist2[0:10])

        practice.addData('response3', resplist3[0:10])

        #add a variable in the output that will count the
        # performance on different letter pairs
        practice.addData('Corr1', Corr1)

        practice.addData('Corr2', Corr2)

        practice.addData('Corr3', Corr3)

        practice.addData('jitter', jitter)

        #add a variable that will count in the output
        # how many times the learning phase and the testing
        # phase occur

        practice.addData('myCount1', myCount1)
        practice.addData('myCount2', myCount2)
        practice.addData('myCount3', myCount3)

        practice.addData('myCount', myCount)
    TextComponent fixation1
      color = black
      font = Calibri
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text = +
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    TextComponent letter1_1
      color = black
      font = hiragana tfb
      letterHeight = 0.15
      pos = [-0.1,0]
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $letter1
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    TextComponent letter1_2
      color = black
      font = hiragana tfb
      letterHeight = 0.15
      pos = [0.1,0]
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $letter2
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    KeyboardComponent resp
      allowedKeys [set every repeat] = 'c','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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  Routine feedback
    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        if(resp.corr) {
          msg='+10'
          msgColor='green';
        } if(!resp.corr) {
          msg='- 10'
          msgColor='red';
        } if(!resp.keys) {
          msg='No response detected'
          msgColor='black';
        }
      Begin Routine:
        if resp.corr:
            msg='+10'
            msgColor='green'

        if not resp.corr:
            msg='-10'
            msgColor='red'

        if not resp.keys:
            msg='No response detected'
    TextComponent blank_feed
      color = black
      font = Calibri
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.35
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    TextComponent feedb
      color [set every repeat] = $msgColor
      font = Calibri
      letterHeight = 0.08
      startVal [time (s)] = 0.35
      stopVal [duration (s)] = 0.6
      text [set every repeat] = $msg
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  Routine Practice_over
    TextComponent instr2
      color = black
      font = Calibri
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The training session is now finished.

        Press any key to continue onto the next section.
    KeyboardComponent instr2_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine test_trial
    CodeComponent code_3
      Code Type = Both
      Begin Experiment:
        posLB = []
        negLV = []
      Begin JS Routine:
        jitter = Math.random() * (0.8 - 0.3) + 0.3;

        jitter = round(jitter, 1);


        jitter2 = Math.random() * (1.0 - 0.5) + 0.5;

        jitter2 = round(jitter2, 1);

        function round(value, precision) {
            var x = Math.pow(10, precision);
            return Math.round(value * x) / x;
        }
      Begin Routine:
        jitter = random() * (0.8 - 0.3) + 0.3
        jitter = round(jitter, 1) # round to 1 decimal place
        jitter2 = random() * (1.0-0.5) + 0.5
      End Routine:
        if (test_resp.keys == pickA):
            posLB = 1
        else:
            posLB = 0

        if (test_resp.keys == avoidB):
            negLB = 1
        else:
            negLB = 0


        test.addData('jitter', jitter)


        test.addData('posLB', posLB)
        test.addData('negLB', negLB)

        if myCount > 3:
            letterMaster.finished = True
    TextComponent fixation2
      color = black
      font = Calibri
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter2
      text = +
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    TextComponent letter2_1
      color = black
      font = hiragana tfb
      letterHeight = 0.15
      pos = (-0.1, 0)
      startVal [time (s)] = $jitter2
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $letter3
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    TextComponent letter2_2
      color = black
      font = hiragana tfb
      letterHeight = 0.15
      pos = (0.1, 0)
      startVal [time (s)] = $jitter2
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $letter4
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    KeyboardComponent test_resp
      allowedKeys [set every repeat] = 'c','m'
      forceEndRoutine = True
      startVal [time (s)] = $jitter2
      stopVal [duration (s)] = 1.5
      store = first key
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  Routine Test_Instr
    TextComponent instr3
      color = black
      font = Calibri
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Test Session

        You will see the same symbols again.

        Now, in different order and combination.

        Pick the symbol that is the most PROBABLE to give you points.
        Avoid the symbol that makes you lose points.

        Use buttons:
        left(C)            right(M)

        Make your decision as quickly as you can.
        If you are unsure go with your gut feeling.


        Press any key to begin.
    KeyboardComponent instr3_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prep
    TextComponent fixation0
      color = black
      font = Calibri
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent letterpic0_1
      image [set every repeat] = $letter10
      pos = (-0.1, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    ImageComponent letterpic0_2
      image [set every repeat] = $letter20
      pos = (0.1, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    KeyboardComponent prep_resp
      allowedKeys [set every repeat] = 'c','m'
      correctAns = $corrAns0
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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  Routine prep_feedback
    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        if(prep_resp.corr) {
          msg0='+10'
          msgColor='green';
        } if(!prep_resp.corr) {
          msg0='- 10'
          msgColor='red';
        } if(!prep_resp.keys) {
          msg0='No response detected'
          msgColor='black';
        }
      Begin Routine:
        if prep_resp.corr:
            msg0='+10'
            msgColor='green'

        if not prep_resp.corr:
            msg0='-10'
            msgColor='red'

        if not prep_resp.keys:
            msg0='No response detected'
    TextComponent prep_feedb
      color [set every repeat] = $msgColor
      font = Calibri
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text [set every repeat] = $msg0
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  Routine Practice_Instruction
    CodeComponent code_6
      Code Type = Both
      Begin Experiment:
        myCount = 0
      Begin JS Experiment:
        myCount = 0
      Begin JS Routine:
        myCount = myCount + 1

        if (myCount === 1){
            letterMaster.finished = true;
        }
      Begin Routine:
        myCount = myCount + 1

        if myCount == 3:
            letterMaster.finished = True
    TextComponent pract_intr
      color = black
      font = Calibri
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Training Session

        You will see 3 pairs of symbols.

        In each pair, one symbol is more PROBABLE to give you points.

        Identify those symbols and choose them.
        Avoid symbols that make you lose points.

        Use buttons:
        left(C)            right(M)
        to make your choices.


        Press any key to begin.
    KeyboardComponent instr1_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Welcome
    TextComponent text
      color = black
      font = Calibri
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please follow the instructions on the following screens.


        To select a symbol on a given side of the screen, use the keys below:

        Left  side =  C          Right side = M


        Press any key to continue.
    KeyboardComponent welc_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prep_over
    TextComponent prep_outro
      color = black
      font = Calibri
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The practice session is now finished.

        You may have noticed that one of the symbols was more likely to give you points.

        This was not always the case.

        It was more PROBABLE that one symbol gave you points.


        Press any key to continue.
    KeyboardComponent outro_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_over
    TextComponent task_outro
      color = black
      font = Calibri
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you, the learning task is now finished.

        You can press Esc to exit the full screen.

        You can then close this window.
    KeyboardComponent outro2_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine test_over
    TextComponent t_outro
      color = black
      font = Calibri
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The test phase is now finished.
        You can take a break before continuing.

        Otherwise press any key to continue.
    KeyboardComponent outro_resp2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prep_Instruction
    TextComponent instr1
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Short Preparation session.

        You will be collecting points.

        Choose one symbol either on the left (C) or the right (M).

        One symbol is more likely to give you 10 points.
        The other symbol is more likely to take away 10 points.

        Choose the symbol that is the most likely to give you points and avoid the symbol that makes you lose points.


        Press any key to continue.
    KeyboardComponent intr0_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Learning_Check
    TextComponent quest
      color = black
      letterHeight = 0.06
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent letter_string
      color = black
      font = hiragana tfb
      letterHeight = 0.1
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $learnt_letters
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    TextComponent number_string
      color = black
      letterHeight = 0.08
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = 1    2    3    4    5    6
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    KeyboardComponent learnt_resp
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine check_instr
    TextComponent check
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Well done!

        Now think about the symbols you saw.

        Which symbol was the MOST likely to give you ponts?

        Which symbol was the LEAST likely to give you points?

        On the next screen, use numbers:
        1  2  3  4  5  or  6 on top of the keyboard.

        Identify the symbols of your choice.


        Press any key to continue.
    KeyboardComponent check_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Prep_Instruction
  LoopInitiator preparation loopType="TrialHandler"
    conditionsFile = hiragana7.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('letter10', 'U'), ('letter20', 'L'), ('corrAns0', 'c'), ('letterA0', 'c'), ('letterC0', None), ('letterE0', None)]),
      OrderedDict([('letter10', 'U'), ('letter20', 'L'), ('corrAns0', 'c'), ('letterA0', 'c'), ('letterC0', None), ('letterE0', None)]),
      OrderedDict([('letter10', 'L'), ('letter20', 'U'), ('corrAns0', 'm'), ('letterA0', 'm'), ('letterC0', None), ('letterE0', None)]),
      OrderedDict([('letter10', 'L'), ('letter20', 'U'), ('corrAns0', 'm'), ('letterA0', 'm'), ('letterC0', None), ('letterE0', None)]),
      OrderedDict([('letter10', 'U'), ('letter20', 'L'), ('corrAns0', 'c'), ('letterA0', 'c'), ('letterC0', None), ('letterE0', None)]),
      OrderedDict([('letter10', 'J'), ('letter20', 'N'), ('corrAns0', 'c'), ('letterA0', None), ('letterC0', 'c'), ('letterE0', None)]),
      OrderedDict([('letter10', 'J'), ('letter20', 'N'), ('corrAns0', 'c'), ('letterA0', None), ('letterC0', 'c'), ('letterE0', None)]),
      OrderedDict([('letter10', 'N'), ('letter20', 'J'), ('corrAns0', 'm'), ('letterA0', None), ('letterC0', 'm'), ('letterE0', None)]),
      OrderedDict([('letter10', 'N'), ('letter20', 'J'), ('corrAns0', 'm'), ('letterA0', None), ('letterC0', 'm'), ('letterE0', None)]),
      OrderedDict([('letter10', 'J'), ('letter20', 'N'), ('corrAns0', 'm'), ('letterA0', None), ('letterC0', 'c'), ('letterE0', None)]),
      OrderedDict([('letter10', 'Z'), ('letter20', 'r'), ('corrAns0', 'c'), ('letterA0', None), ('letterC0', None), ('letterE0', 'c')])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
    Routine prep
    Routine prep_feedback
  LoopTerminator preparation
  Routine Prep_over
  LoopInitiator letterMaster loopType="TrialHandler"
    conditionsFile = letterchoice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('letterset', 'hiragana1.xlsx'), ('letterset2', 'hiragana11.xlsx'), ('letterset3', 'hiragana12.xlsx')]),
      OrderedDict([('letterset', 'hiragana2.xlsx'), ('letterset2', 'hiragana21.xlsx'), ('letterset3', 'hiragana22.xlsx')]),
      OrderedDict([('letterset', 'hiragana3.xlsx'), ('letterset2', 'hiragana31.xlsx'), ('letterset3', 'hiragana32.xlsx')])]
    Routine Practice_Instruction
    LoopInitiator practice loopType="TrialHandler"
      conditionsFile = $letterset
      loopType = random
      nReps = 6
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      Routine trial
      Routine feedback
    LoopTerminator practice
    Routine Practice_over
    Routine Test_Instr
    LoopInitiator test loopType="TrialHandler"
      conditionsFile = $letterset2
      loopType = random
      nReps = 2
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      Routine test_trial
    LoopTerminator test
    Routine check_instr
    LoopInitiator checks loopType="TrialHandler"
      conditionsFile = $letterset3
      loopType = sequential
      nReps = 1
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      Routine Learning_Check
    LoopTerminator checks
    Routine test_over
  LoopTerminator letterMaster
  Routine task_over
